<?xml version="1.0" encoding="UTF-8"?>
<!--
This CellML file was generated on 07/05/2008 at 16:14:45 using:

COR (0.9.31.927)
Copyright 2002-2008 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this cellular model
http://www.CellML.org/
--><model xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#" xmlns:xlink="http://www.w3.org/1999/xlink" name="beeler_reuter_1977_version06" id="beeler_reuter_1977">
  
  
  <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->

   <units name="ms">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="per_ms">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="mV">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_mV">
      <unit units="volt" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_mV_ms">
      <unit units="mV" exponent="-1"/>
      <unit units="ms" exponent="-1"/>
   </units>
   <units name="mS_per_mm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="milli" exponent="-2"/>
   </units>
   <units name="uF_per_mm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="milli" exponent="-2"/>
   </units>
   <units name="uA_per_mm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="milli" exponent="-2"/>
   </units>
   <units name="concentration_units">
      <unit units="mole" prefix="nano"/>
      <unit units="metre" prefix="milli" exponent="-3"/>
   </units>
   <units name="per_concentration_units">
      <unit units="concentration_units" exponent="-1"/>
   </units>
   <units name="coulomb_per_mole">
      <unit units="coulomb"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units name="per_mm">
      <unit units="metre" prefix="-3" exponent="-1"/>
   </units>
   <component name="environment">
      <variable id="environment_time" units="ms" name="time" interface="public"/>
   </component>
   <component name="membrane">
      <variable id="membrane_V" units="mV" name="V" initial_value="-84.624" interface="public"/>
      <variable id="membrane_C" units="uF_per_mm2" name="C" initial_value="0.01"/>
      <variable units="ms" name="time" interface="public"/>
      <variable units="uA_per_mm2" name="i_Na" interface="public"/>
      <variable units="uA_per_mm2" name="i_s" interface="public"/>
      <variable units="uA_per_mm2" name="i_x1" interface="public"/>
      <variable units="uA_per_mm2" name="i_K1" interface="public"/>
      <variable units="uA_per_mm2" name="Istim" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="membrane_voltage_diff_eq">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>Istim</ci>
                  <apply>
                     <plus/>
                     <ci>i_Na</ci>
                     <ci>i_s</ci>
                     <ci>i_x1</ci>
                     <ci>i_K1</ci>
                  </apply>
               </apply>
               <ci>C</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current">
      <variable id="sodium_current_i_Na" units="uA_per_mm2" name="i_Na" interface="public"/>
      <variable units="mS_per_mm2" name="g_Na" initial_value="4e-2"/>
      <variable units="mV" name="E_Na" initial_value="50"/>
      <variable units="mS_per_mm2" name="g_Nac" initial_value="3e-5"/>
      <variable units="ms" name="time" interface="public_and_private"/>
      <variable units="mV" name="V" interface="public_and_private"/>
      <variable units="dimensionless" name="m" interface="private"/>
      <variable units="dimensionless" name="h" interface="private"/>
      <variable units="dimensionless" name="j" interface="private"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>g_Na</ci>
                     <apply>
                        <power/>
                        <ci>m</ci>
                        <cn cellml:units="dimensionless">3</cn>
                     </apply>
                     <ci>h</ci>
                     <ci>j</ci>
                  </apply>
                  <ci>g_Nac</ci>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current_m_gate">
      <variable units="dimensionless" name="m" initial_value="0.011" interface="public"/>
      <variable units="per_ms" name="alpha_m"/>
      <variable units="per_ms" name="beta_m"/>
      <variable units="mV" name="V" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="per_mV_ms">1</cn>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="mV">47</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.1</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">47</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <times/>
               <cn cellml:units="per_ms">40</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_mV">0.056</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">72</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current_h_gate">
      <variable units="dimensionless" name="h" initial_value="0.988" interface="public"/>
      <variable units="per_ms" name="alpha_h"/>
      <variable units="per_ms" name="beta_h"/>
      <variable units="mV" name="V" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <cn cellml:units="per_ms">0.126</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_mV">0.25</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">77</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_ms">1.7</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.082</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">22.5</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current_j_gate">
      <variable units="dimensionless" name="j" initial_value="0.975" interface="public"/>
      <variable units="per_ms" name="alpha_j"/>
      <variable units="per_ms" name="beta_j"/>
      <variable units="mV" name="V" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_j</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.055</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.25</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">78</cn>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.2</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">78</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_j</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_ms">0.3</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.1</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">32</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>j</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_j</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>j</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_j</ci>
                  <ci>j</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current">
      <variable id="slow_inward_current_i_s" units="uA_per_mm2" name="i_s" interface="public"/>
      <variable units="mS_per_mm2" name="g_s" initial_value="9e-4"/>
      <variable units="mV" name="E_s"/>
      <variable units="concentration_units" name="Cai" initial_value="1e-4"/>
      <variable units="ms" name="time" interface="public_and_private"/>
      <variable units="mV" name="V" interface="public_and_private"/>
      <variable units="dimensionless" name="d" interface="private"/>
      <variable units="dimensionless" name="f" interface="private"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_s</ci>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <cn cellml:units="mV">82.3</cn>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="mV">13.0287</cn>
                  <apply>
                     <ln/>
                     <apply>
                        <times/>
                        <ci>Cai</ci>
                        <cn cellml:units="per_concentration_units">0.001</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_s</ci>
            <apply>
               <times/>
               <ci>g_s</ci>
               <ci>d</ci>
               <ci>f</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_s</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cai</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_mm">0.01</cn>
                     </apply>
                     <ci>i_s</ci>
                  </apply>
                  <cn cellml:units="coulomb_per_mole">1</cn>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.07</cn>
                  <apply>
                     <minus/>
                     <cn cellml:units="concentration_units">0.0001</cn>
                     <ci>Cai</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current_d_gate">
      <variable units="dimensionless" name="d" initial_value="0.003" interface="public"/>
      <variable units="per_ms" name="alpha_d"/>
      <variable units="per_ms" name="beta_d"/>
      <variable units="mV" name="V" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_d</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.095</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">5</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">100</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">5</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">13.89</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_d</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.07</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">44</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">59</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">44</cn>
                        </apply>
                        <cn cellml:units="mV">20</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>d</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_d</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>d</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_d</ci>
                  <ci>d</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current_f_gate">
      <variable units="dimensionless" name="f" initial_value="0.994" interface="public"/>
      <variable units="per_ms" name="alpha_f"/>
      <variable units="per_ms" name="beta_f"/>
      <variable units="mV" name="V" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_f</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.012</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">28</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">125</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">28</cn>
                        </apply>
                        <cn cellml:units="mV">6.67</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_f</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.0065</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">30</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">50</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">30</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">5</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>f</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_f</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>f</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_f</ci>
                  <ci>f</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_dependent_outward_current" id="time_dependent_outward_current">
      <variable id="time_dependent_outward_current_i_x1" units="uA_per_mm2" name="i_x1" interface="public"/>
      <variable units="ms" name="time" interface="public_and_private"/>
      <variable units="mV" name="V" interface="public_and_private"/>
      <variable units="dimensionless" name="x1" interface="private"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>x1</ci>
                  <cn type="e-notation" cellml:units="uA_per_mm2">8<sep/>-3</cn>
                  <apply>
                     <minus/>
                     <apply>
                        <exp/>
                        <apply>
                           <times/>
                           <cn cellml:units="per_mV">0.04</cn>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">77</cn>
                           </apply>
                        </apply>
                     </apply>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
               </apply>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <cn cellml:units="per_mV">0.04</cn>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">35</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_dependent_outward_current_x1_gate">
      <variable units="dimensionless" name="x1" initial_value="0.0001" interface="public"/>
      <variable units="per_ms" name="alpha_x1"/>
      <variable units="per_ms" name="beta_x1"/>
      <variable units="mV" name="V" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn type="e-notation" cellml:units="per_ms">5<sep/>-4</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">50</cn>
                        </apply>
                        <cn cellml:units="mV">12.1</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">50</cn>
                        </apply>
                        <cn cellml:units="mV">17.5</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.0013</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">16.67</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">25</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_x1</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>x1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_x1</ci>
                  <ci>x1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_independent_outward_current">
      <variable id="time_independent_outward_current_i_K1" units="uA_per_mm2" name="i_K1" interface="public"/>
      <variable units="ms" name="time" interface="public"/>
      <variable units="mV" name="V" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K1</ci>
            <apply>
               <times/>
               <cn cellml:units="uA_per_mm2">0.0035</cn>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">4</cn>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <times/>
                                 <cn cellml:units="per_mV">0.04</cn>
                                 <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="mV">85</cn>
                                 </apply>
                              </apply>
                           </apply>
                           <cn cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <exp/>
                           <apply>
                              <times/>
                              <cn cellml:units="per_mV">0.08</cn>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="mV">53</cn>
                              </apply>
                           </apply>
                        </apply>
                        <apply>
                           <exp/>
                           <apply>
                              <times/>
                              <cn cellml:units="per_mV">0.04</cn>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="mV">53</cn>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <cn cellml:units="per_mV">0.2</cn>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">23</cn>
                        </apply>
                     </apply>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <times/>
                              <apply>
                                 <minus/>
                                 <cn cellml:units="per_mV">0.04</cn>
                              </apply>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="mV">23</cn>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="stimulus_protocol">
      <variable units="uA_per_mm2" name="Istim" interface="public"/>
      <variable units="ms" name="IstimStart" initial_value="10"/>
      <variable units="ms" name="IstimEnd" initial_value="50000"/>
      <variable units="uA_per_mm2" name="IstimAmplitude" initial_value="0.5"/>
      <variable units="ms" name="IstimPeriod" initial_value="1000"/>
      <variable units="ms" name="IstimPulseDuration" initial_value="1"/>
      <variable units="ms" name="time" interface="public"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Istim</ci>
            <piecewise>
               <piece>
                  <ci>IstimAmplitude</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>time</ci>
                        <ci>IstimStart</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <ci>time</ci>
                        <ci>IstimEnd</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>time</ci>
                              <ci>IstimStart</ci>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <apply>
                                       <minus/>
                                       <ci>time</ci>
                                       <ci>IstimStart</ci>
                                    </apply>
                                    <ci>IstimPeriod</ci>
                                 </apply>
                              </apply>
                              <ci>IstimPeriod</ci>
                           </apply>
                        </apply>
                        <ci>IstimPulseDuration</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="uA_per_mm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   
   <encapsulation>
      
      <component_ref component="sodium_current">
         <component_ref component="sodium_current_m_gate"/>
         <component_ref component="sodium_current_h_gate"/>
         <component_ref component="sodium_current_j_gate"/>
      </component_ref>
      <component_ref component="slow_inward_current">
         <component_ref component="slow_inward_current_d_gate"/>
         <component_ref component="slow_inward_current_f_gate"/>
      </component_ref>
      <component_ref component="time_dependent_outward_current">
         <component_ref component="time_dependent_outward_current_x1_gate"/>
      </component_ref>
   </encapsulation>
   <connection component_2="environment" component_1="membrane">
      
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection component_2="environment" component_1="sodium_current">
      
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection component_2="environment" component_1="slow_inward_current">
      
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection component_2="environment" component_1="time_dependent_outward_current">
      
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection component_2="environment" component_1="time_independent_outward_current">
      
      <map_variables variable_2="time" variable_1="time"/>
   </connection>
   <connection component_2="sodium_current" component_1="membrane">
      
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_Na" variable_1="i_Na"/>
   </connection>
   <connection component_2="slow_inward_current" component_1="membrane">
      
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_s" variable_1="i_s"/>
   </connection>
   <connection component_2="time_dependent_outward_current" component_1="membrane">
      
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_x1" variable_1="i_x1"/>
   </connection>
   <connection component_2="time_independent_outward_current" component_1="membrane">
      
      <map_variables variable_2="V" variable_1="V"/>
      <map_variables variable_2="i_K1" variable_1="i_K1"/>
   </connection>
   <connection component_2="sodium_current_m_gate" component_1="sodium_current">
      
      <map_variables variable_2="m" variable_1="m"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection component_2="sodium_current_h_gate" component_1="sodium_current">
      
      <map_variables variable_2="h" variable_1="h"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection component_2="sodium_current_j_gate" component_1="sodium_current">
      
      <map_variables variable_2="j" variable_1="j"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection component_2="time_dependent_outward_current_x1_gate" component_1="time_dependent_outward_current">
      
      <map_variables variable_2="x1" variable_1="x1"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection component_2="slow_inward_current_d_gate" component_1="slow_inward_current">
      
      <map_variables variable_2="d" variable_1="d"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection component_2="slow_inward_current_f_gate" component_1="slow_inward_current">
      
      <map_variables variable_2="f" variable_1="f"/>
      <map_variables variable_2="time" variable_1="time"/>
      <map_variables variable_2="V" variable_1="V"/>
   </connection>
   <connection component_2="stimulus_protocol" component_1="membrane">
      
      <map_variables variable_2="Istim" variable_1="Istim"/>
   </connection>
   <connection component_2="stimulus_protocol" component_1="environment">
      
      <map_variables variable_2="time" variable_1="time"/>
   </connection>









</model>